# Include beam information

########################################
# beam
########################################
s:So/MySource/Type                     = "Beam"
s:So/MySource/Component                = "BeamPosition"
s:So/MySource/BeamParticle             = "proton"
i:So/MySource/NumberOfHistoriesInRun   = 1000
d:So/MySource/BeamEnergy               = 120 MeV
d:Ge/MySource/RotX=180. deg
s:So/MySource/BeamPositionDistribution = "Flat"
d:So/MySource/BeamPositionCutoffX = 1. cm
d:So/MySource/BeamPositionCutoffY = 1. cm
s:So/MySource/BeamPositionCutoffShape = "Rectangle"
s:So/MySource/BeamAngularDistribution  = "None"

d:So/MySource/BeamPositionZ= Ge/WaterPhantom/HLZ + 1.5 cm

s:outdir = ""
########################################
# Physics
########################################
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_AllHP" "g4decay" "g4ion-binarycascade" "g4h-elastic_HP" "g4stopping"

i:Ts/NumberOfThreads = 0
# sv:Ph/Default/Modules = 2 "proton" "photons", "electron"
########################################
# Sequence control
########################################
b:Ts/PauseBeforeSequence = "F"
i:Ts/ShowHistoryCountAtInterval = 1000 # how often to print history count to the console
# If set to 0, history count will never be printed
b:Ts/ShowHistoryCountOnSingleLine = "FALSE" # Make count reuse a single line of console
i:Tf/Verbosity = 0


########################################
# Graphics
########################################
b:Ts/PauseBeforeQuit = "False"

########################################
# Geometry
########################################

d:Ge/World/HLX = 1. m
d:Ge/World/HLY = 1. m
d:Ge/World/HLZ = 1. m
s:Ge/World/Material = "G4_Galactic"

# Water Tank / Phantom
s:Ge/WaterPhantom/Parent 		= "World"
s:Ge/WaterPhantom/Type   		= "TsBox"
s:Ge/WaterPhantom/Material		= "G4_WATER"
d:Ge/WaterPhantom/HLX 			= 3.0 cm
d:Ge/WaterPhantom/HLY 			= 3.0 cm
d:Ge/WaterPhantom/HLZ 			= 20.0 cm
d:Ge/WaterPhantom/TransX		= 0.0 cm
d:Ge/WaterPhantom/TransY		= 0.0 cm
d:Ge/WaterPhantom/TransZ		= 0.0 cm
d:Ge/WaterPhantom/RotX			= 0. deg
d:Ge/WaterPhantom/RotY			= 0. deg
d:Ge/WaterPhantom/RotZ			= 0. deg
d:Ge/WaterPhantom/MaxStepSize 	= 0.5 mm
s:Ge/WaterPhantom/Color      = "blue"

########################################
# Scoring Geometry
########################################

s:Ge/ScoringZBox/Parent     = "WaterPhantom"
s:Ge/ScoringZBox/Type       = "TsBox"
b:Ge/ScoringZBox/IsParallel = "TRUE"
d:Ge/ScoringZBox/HLX        = 1 cm
d:Ge/ScoringZBox/HLY        = 1 cm
d:Ge/ScoringZBox/HLZ        = 10 cm
s:Ge/ScoringZBox/Color      = "green"
i:Ge/ScoringZBox/XBins      = 1
i:Ge/ScoringZBox/YBins      = 1
i:Ge/ScoringZBox/ZBins      = 300
d:Ge/ScoringZBox/TransZ    = Ge/WaterPhantom/HLZ - Ge/ScoringZBox/HLZ cm
d:Ge/ScoringZBox/RotZ=180. deg



########################################
# Scoring
########################################

s:Sc/Dose/Quantity                       = "DoseToMedium"
s:Sc/Dose/Component                      = "ScoringZBox"
b:Sc/Dose/OutputToConsole                = "FALSE"
s:Sc/Dose/IfOutputFileAlreadyExists      = "Overwrite"
sv:Sc/Dose/includeparticles              = 1 "protons"
b:Sc/Dose/PropagateToChildren = "True"
s:Sc/Dose/OutputFile =  "Dose"
sv:Sc/Dose/OnlyIncludeParticlesNamed = 1 "proton"


# Score ambient dose equivalent for neutrons
sv:Sc/scorerAmbDosePerSource/OnlyIncludeParticlesNamed = 1 "neutron"
s:Sc/scorerAmbDosePerSource/Quantity                   = "MyAmbientDoseEquivalent"
s:Sc/scorerAmbDosePerSource/Component                  = "WaterPhantom"
s:Sc/scorerAmbDosePerSource/OutputFile                 = "AmbientDoseNeutronPerSourceNeutron"
b:Sc/scorerAmbDosePerSource/OutputToConsole            = "True"
s:Sc/scorerAmbDosePerSource/IfOutputFileAlreadyExists  = "Overwrite"
s:Sc/scorerAmbDosePerSource/ImportRespons  = "Wendi2_Respons.csv"
sv:Sc/scorerAmbDosePerSource/Report                    = 2 "Sum" "Standard_Deviation"
# Set the fluence-to-dose conversion factors.
s:Sc/scorerAmbDosePerSource/GetAmbientDoseEquivalentForParticleNamed = "neutron"
dv:Sc/scorerAmbDosePerSource/FluenceToDoseConversionEnergies = 58
2.5314e-08 7.71605e-08 2.35195e-07 6.33404e-07 1.70582e-06 4.05885e-06 1.02746e-05 2.44475e-05 6.18866e-05 0.000142765
0.000309568 0.000611723 0.00100388 0.00150131 0.00217678 0.00305995 0.00430144 0.00604662 0.00849986  0.0119484
 0.0157877  0.0221931  0.0293242  0.0399651  0.0511969  0.0676476  0.0866593   0.101168     0.1296   0.171243
  0.233382   0.289858    0.37132   0.490632   0.590784   0.711379          1    1.85741    2.95521    4.95083
   9.98711    14.7825     18.937    20.1466    48.9368    98.7183    195.073    504.105    996.138    2182.41
   5086.78     9846.4      29400    99357.1     302853     982103 3.05600e+06 9.91011e+06  MeV
dv:Sc/scorerAmbDosePerSource/FluenceToDoseConversionValues   = 58
1.04694e-09 1.0279e-09 1.00922e-09 9.90868e-10 9.72854e-10 9.55168e-10 9.37803e-10 9.29239e-10 9.12346e-10 8.95759e-10
8.79474e-10 8.71443e-10 8.63485e-10 1.07615e-09 1.31681e-09 1.59657e-09 1.91809e-09 2.32559e-09 2.79393e-09 3.35658e-09
3.99571e-09 4.7131e-09 5.50853e-09 6.55742e-09 7.52478e-09 8.71443e-09 9.8182e-09 1.09608e-08 1.29287e-08 1.56754e-08
1.86602e-08 2.18095e-08 2.59623e-08 3.06236e-08 3.51412e-08 3.95922e-08 4.93432e-08 4.67006e-08 4.46069e-08 4.26071e-08
4.69871e-08 5.15014e-08 5.64495e-08 5.24551e-08 3.61218e-08 2.6443e-08 2.2418e-08 2.95202e-08 3.7933e-08 4.31315e-08
4.93432e-08 5.27769e-08 5.15014e-08 5.05651e-08 5.96437e-08 7.20944e-08 9.0956e-08 1.17594e-07 Sv*mm2